{
    // STATIC configuration only (server ports, plugin settings, DICOM AET).
    //
    // This file does NOT define the database, storage, or auth config. Those are
    // injected at runtime via ORTHANC__* environment variables in docker-compose.yml:
    //   - ORTHANC__POSTGRESQL__ENABLE_INDEX=true    -> index/metadata in PostgreSQL (orthanc-db)
    //   - ORTHANC__POSTGRESQL__ENABLE_STORAGE=false -> DICOM *files* on the FILESYSTEM
    //        (default StorageDirectory /var/lib/orthanc/db, backed by the `orthanc-data` volume)
    //   - ORTHANC__REGISTERED_USERS                 -> HTTP Basic credentials
    // Source of truth for DB/storage/auth is docker-compose.yml, not this file.
    // (Orthanc's config parser permits // comments.)
    "Name": "Nidan Orthanc",
    "Plugins": [ "/usr/share/orthanc/plugins" ],
    "DicomServerEnabled": true,
    "DicomPort": 4242,
    "DicomAet": "NIDAN_ORTHANC",
    "HttpServerEnabled": true,
    "HttpPort": 8042,
    "RemoteAccessAllowed": true,
    "AuthenticationEnabled": true,
    "Worklists": {
        "Enable": true,
        "Database": "/var/lib/orthanc/worklists",
        "FilterIssuerAet": false,
        "LimitAnswers": 0
    },
    "DicomWeb": {
        "Enable": true,
        "Root": "/dicom-web/",
        "EnableWado": true,
        "WadoRoot": "/wado",
        "Ssl": false,
        "StudiesMetadata": "Full",
        "SeriesMetadata": "Full"
    },
    "Ohif": {
        "DataSource": "dicom-web",
        "RouterBasename": "/ohif/"
    },
    "OrthancExplorer2": {
        "Enable": true,
        "IsDefaultOrthancUI": true,
        "UiOptions": {
            "EnableOpenInOhifViewer3": true,
            "OhifViewer3PublicRoot": "/ohif/"
        }
    },
    "LuaScripts": [
        "/etc/orthanc/webhook.lua"
    ]
}